#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3 // Use modern global access method and strict wave access.
#pragma ModuleName=Epochs

/// @brief Acquire data with the given DAQSettings on two headstages
static Function AcquireData(s, devices, stimSetName1, stimSetName2[, dDAQ, oodDAQ])
	STRUCT DAQSettings& s
	string devices
	string stimSetName1, stimSetName2
	variable dDAQ, oodDAQ

	string unlockedPanelTitle, device
	variable i, numEntries

	dDAQ = ParamIsDefault(dDAQ) ? 0 : !!dDAQ
	oodDAQ = ParamIsDefault(oodDAQ) ? 0 : !!oodDAQ

	numEntries = ItemsInList(devices)
	for(i = 0; i < numEntries; i += 1)
		device = stringFromList(i, devices)

		unlockedPanelTitle = DAP_CreateDAEphysPanel()

#ifdef TESTS_WITH_YOKING
		PGC_SetAndActivateControl(unlockedPanelTitle, "popup_MoreSettings_DeviceType", val=2)
		PGC_SetAndActivateControl(unlockedPanelTitle, "popup_moreSettings_DeviceNo", val=i)
#else
		ChooseCorrectDevice(unlockedPanelTitle, device)
#endif
		PGC_SetAndActivateControl(unlockedPanelTitle, "button_SettingsPlus_LockDevice")

		REQUIRE(WindowExists(device))

		PGC_SetAndActivateControl(device, GetPanelControl(0, CHANNEL_TYPE_HEADSTAGE, CHANNEL_CONTROL_CHECK), val=1, switchTab = 1)
		PGC_SetAndActivateControl(device, GetPanelControl(1, CHANNEL_TYPE_HEADSTAGE, CHANNEL_CONTROL_CHECK), val=1)

		PGC_SetAndActivateControl(device, GetPanelControl(0, CHANNEL_TYPE_DAC, CHANNEL_CONTROL_WAVE), val = GetStimSet(stimSetName1) + 1)
		PGC_SetAndActivateControl(device, GetPanelControl(1, CHANNEL_TYPE_DAC, CHANNEL_CONTROL_WAVE), val = GetStimSet(stimSetName2) + 1)

		WAVE ampMCC = GetAmplifierMultiClamps()
		WAVE ampTel = GetAmplifierTelegraphServers()

		CHECK_EQUAL_VAR(DimSize(ampMCC, ROWS), 2)
		CHECK_EQUAL_VAR(DimSize(ampTel, ROWS), 2)

		// HS 0 with Amp
		PGC_SetAndActivateControl(device, "Popup_Settings_HeadStage", val = 0)
		PGC_SetAndActivateControl(device, "popup_Settings_Amplifier", val = 1)

		// HS 1 with Amp
		PGC_SetAndActivateControl(device, "Popup_Settings_HeadStage", val = 1)
		PGC_SetAndActivateControl(device, "popup_Settings_Amplifier", val = 2)

		PGC_SetAndActivateControl(device, DAP_GetClampModeControl(V_CLAMP_MODE, 0), val=1)
		PGC_SetAndActivateControl(device, DAP_GetClampModeControl(V_CLAMP_MODE, 1), val=1)
		DoUpdate/W=$device

		PGC_SetAndActivateControl(device, "button_Hardware_AutoGainAndUnit")

		PGC_SetAndActivateControl(device, "check_Settings_MD", val = s.MD)
		PGC_SetAndActivateControl(device, "Check_DataAcq1_RepeatAcq", val = s.RA)
		PGC_SetAndActivateControl(device, "Check_DataAcq_Indexing", val = s.IDX)
		PGC_SetAndActivateControl(device, "Check_DataAcq1_IndexingLocked", val = s.LIDX)
		PGC_SetAndActivateControl(device, "Check_Settings_BackgrndDataAcq", val = s.BKG_DAQ)

		PGC_SetAndActivateControl(device, "SetVar_DataAcq_SetRepeats", val = s.RES)

		PGC_SetAndActivateControl(device, "Check_DataAcq1_DistribDaq", val = dDAQ)
		PGC_SetAndActivateControl(device, "Check_DataAcq1_dDAQOptOv", val = oodDAQ)

		PASS()
	endfor

	device = devices

#ifdef TESTS_WITH_YOKING
	PGC_SetAndActivateControl(device, "button_Hardware_Lead1600")
	PGC_SetAndActivateControl(device, "popup_Hardware_AvailITC1600s", val=0)
	PGC_SetAndActivateControl(device, "button_Hardware_AddFollower")

	ARDLaunchSeqPanel()
	PGC_SetAndActivateControl("ArduinoSeq_Panel", "SendSequenceButton")
#endif

	PGC_SetAndActivateControl(device, "DataAcquireButton")
End

/// @brief Tests if the 2D text wave e is tightly packed each row in all cols from top
static Function TestEpochChannelTight(e)
	WAVE/T e

	variable i,j, numCols, numRows, emptyFlag
	string s

	numRows = DimSize(e, ROWS)
	numCols = DimSize(e, COLS)
	CHECK(numRows > 0)
	CHECK(numCols > 0)
	for(i = 0; i < numRows; i += 1)
		for(j = 0; j < numCols; j += 1)
			s = e[i][j]
			if(isEmpty(s) && !emptyFlag)
				// col 0 must be first empty
				CHECK_EQUAL_VAR(j, 0)
				emptyFlag = 1
			elseif(emptyFlag)
				// all remaining entries must be empty
				CHECK_EMPTY_STR(s)
			endif
		endfor
	endfor
End

static Constant OODDAQ_PRECISION = 0.001

static Function TestEpochsMonotony(e, DAChannel)
	WAVE/T e
	WAVE DAChannel

	variable i, epochCnt, rowCnt, beginInt, endInt, epochNr, dur, amplitude, center, DAAmp
	string s

	rowCnt = DimSize(e, ROWS)

	for(epochCnt = 0; epochCnt < rowCnt; epochCnt += 1)
		s = e[epochCnt][0]
		if(isEmpty(s))
			break
		endif
	endfor
	REQUIRE(epochCnt > 0)

	Make/FREE/N=(epochCnt) startT, endT, durT, marker, isOodDAQ
	startT[] = str2num(e[p][0])
	endT[] = str2num(e[p][1])
	durT[] = endT[p] - startT[p]
	CHECK(WaveMin(startT) >= 0)
	CHECK(WaveMin(endT) >= 0)
	CHECK(WaveMin(durT) >= 0)
	isOodDAQ[] = strsearch(e[p][2], EPOCH_OODDAQ_REGION_KEY, 0) != -1
	CHECK_EQUAL_VAR(WaveMin(startT), 0)
	CHECK(WaveMin(durT) > 0)

	// check if start times are monotonoeus increasing
	if(epochCnt > 1)
		for(i = 1; i < epochCnt; i += 1)
			CHECK(startT[i - 1] <= startT[i])
		endfor
	endif

	// find subsequent covered range from epoch segments, exclude oodDAQ regions
	do
		dur = Inf
		for(i = 0; i < epochCnt; i += 1)
			if(!marker[i] && startT[i] == beginInt && !isOodDAQ[i])
				if(durT[i] < dur)
					dur = durT[i]
					epochNr = i
				endif
			endif
		endfor
		if(dur < Inf)
			beginInt = endT[epochNr]
			marker[epochNr] = 1
		endif
	while(dur < Inf)
	endInt = endT[epochNr]

	// check if remaining epochs are inside the covered range
	// and start at a time of an already marked epoch
	do
		FindValue/V=0 marker
		if(V_Value == -1)
			break
		endif
		epochNr = V_Value
		beginInt = startT[epochNr]

		if(isOodDAQ[epochNr])
			// for oodDAQ regions we check only if they are in range
			REQUIRE(startT[epochNr] >= 0 && endT[epochNr] <= endInt + OODDAQ_PRECISION)
			marker[epochNr] = 1
		else
			// check if range ends within consecutive range determined above
			CHECK(endT[epochNr] <= endInt)
			for(i = 0; i < epochCnt; i += 1)
				if(marker[i] && startT[i] == beginInt)
					marker[epochNr] = 1
					break
				endif
			endfor
			// for remaining epoch no identical start time of smaller epoch segment was found
			// there should be an identical start time from a smaller segment due to the idea that the (non-oodDAQRegions) epochs are ordered tree like
			REQUIRE(i < epochCnt)
		endif
	while(1)

	// check amplitudes
	for(i = 0; i < epochCnt; i += 1)
		amplitude = NumberByKey("Amplitude", e[i][2], "=")
		if(numtype(amplitude) != 2)
			WaveStats/R=(startT[i] * 1000, endT[i] * 1000)/Q/M=1 DAChannel
			CHECK_EQUAL_VAR(V_max, amplitude)
		endif
	endfor
End

static Function TestEpochsGeneric(device)
	string device

	variable numEntries, endTimeDAC, endTimeEpochs, samplingInterval
	variable i
	string list

	string sweeps, configs
	variable sweepNo

	Make/FREE/N=(NUM_DA_TTL_CHANNELS) chanMarker

	// retrieve generic information
	sweeps  = GetListOfObjects(GetDeviceDataPath(device), DATA_SWEEP_REGEXP, fullPath = 1)
	configs = GetListOfObjects(GetDeviceDataPath(device), DATA_CONFIG_REGEXP, fullPath = 1)

	CHECK_EQUAL_VAR(ItemsInList(sweeps), 1)
	CHECK_EQUAL_VAR(ItemsInList(configs), 1)
	WAVE/Z sweep  = $StringFromList(0, sweeps)
	CHECK_WAVE(sweep, NUMERIC_WAVE, minorType = FLOAT_WAVE)
	sweepNo = ExtractSweepNumber(NameOfWave(sweep))
	CHECK(sweepNo >= 0)

	WAVE/Z config = $StringFromList(0, configs)
	CHECK_WAVE(config, NUMERIC_WAVE)
	CHECK_EQUAL_VAR(DimSize(config, ROWS), DimSize(sweep, COLS))
	CHECK_EQUAL_VAR(DimSize(config, ROWS), 4)
	WAVE DACs = GetDACListFromConfig(config)
	CHECK_EQUAL_WAVES(DACs, {0, 1}, mode = WAVE_DATA)

	WAVE/T textualValues   = GetLBTextualValues(device)
	WAVE   numericalValues = GetLBNumericalValues(device)

	// basic check of internal epoch wave
	WAVE/T epochs = GetEpochsWave(device)
	CHECK_EQUAL_VAR(DimSize(epochs, COLS), 4)
	CHECK_EQUAL_VAR(DimSize(epochs, LAYERS), NUM_DA_TTL_CHANNELS)
	numEntries = DimSize(DACs, ROWS)
	CHECK_EQUAL_VAR(numEntries, 2)
	for(i = 0; i < numEntries; i += 1)
		Duplicate/FREE/T/RMD=[][][DACs[i]] epochs, epochChannel
		Redimension/N=(-1, -1, 0) epochChannel
		TestEpochChannelTight(epochChannel)
		chanMarker[i] = 1
	endfor
	// all other channels must have empty epochs list
	for(i = 0; i < NUM_DA_TTL_CHANNELS; i += 1)
		if(!chanMarker[i])
			Duplicate/FREE/T/RMD=[][][i] epochs, epochChannel
			Redimension/N=(-1, -1, 0) epochChannel
			Duplicate/T/FREE epochChannel, refChannel
			refChannel = ""
			CHECK_EQUAL_WAVES(epochChannel, refChannel)
		endif
	endfor

	// further checks of data from LabNotebook Entries
	WAVE/Z samplInt = GetLastSetting(numericalValues, sweepNo, "Sampling interval", DATA_ACQUISITION_MODE)
	samplingInterval = samplInt[INDEP_HEADSTAGE] * 1000
	endTimeDAC = samplingInterval * DimSize(sweep, ROWS) / 1E6

	WAVE/T epochLBEntries = GetLastSetting(textualValues, sweepNo, EPOCHS_ENTRY_KEY, DATA_ACQUISITION_MODE)

	for(i = 0; i < numEntries; i += 1)
		WAVE/T epochChannel = ListToTextWaveMD(epochLBEntries[i], 2, rowSep = ":", colSep = ",")
		Make/FREE/O/N=(DimSize(epochChannel, ROWS)) endT

		// does the latest end time exceed the 'acquiring part of the' DA wave?
		endT[] = str2num(epochChannel[p][1])
		// allow epochEnd to exceed range by less than one sample point
		endTimeEpochs = trunc(WaveMax(endT) / samplingInterval) * samplingInterval
		CHECK(endTimeEpochs <= endTimeDAC)
		Duplicate/FREE/RMD=[][i] sweep, DAchannel
		Redimension/N=(-1, 0) DAchannel

		TestEpochsMonotony(epochChannel, DAchannel)
	endfor

End

/// <------------- TESTS FOLLOW HERE ---------------------->

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest1([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest0_DA_0", "EpochTest0_DA_0")
End

Function EP_EpochTest1_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest2([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest1_DA_0", "EpochTest1_DA_0")
End

Function EP_EpochTest2_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest3([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest2_DA_0", "EpochTest2_DA_0")
End

Function EP_EpochTest3_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest4([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest2_DA_0", "EpochTest2_DA_0", dDAQ = 1)
End

Function EP_EpochTest4_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest5([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest2_DA_0", "EpochTest2_DA_0", oodDAQ = 1)
End

Function EP_EpochTest5_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End

// UTF_TD_GENERATOR HardwareMain#DeviceNameGeneratorMD1
Function EP_EpochTest6([str])
	string str

	STRUCT DAQSettings s
	InitDAQSettingsFromString(s, "MD1_RA0_I0_L0_BKG_1_RES_1")
	AcquireData(s, str, "EpochTest2_DA_0", "EpochTest3_DA_0", oodDAQ = 1)
End

Function EP_EpochTest6_REENTRY([str])
	string str

	TestEpochsGeneric(str)
End
